PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'płeć': '', 'wiek': '', 'wariant ': '', 'uczestnik': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = $[1,1,1]
  expName = navon_task
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 's','h'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine interTrial
    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine intro
    ImageComponent introduction
      image [set every repeat] = $exp_intro
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator session loopType="TrialHandler"
    conditionsFile = global_first.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'gl_level': 'navon_globalny.xlsx', 'exp_intro': 'instrukcja_warunek_globalny.png'},
      {'gl_level': 'navon_lokalny.xlsx', 'exp_intro': 'instrukcja_warunek_lokalny.png'},
      {'gl_level': 'navon_lokalny.xlsx', 'exp_intro': 'instrukcja_warunek_lokalny.png'},
      {'gl_level': 'navon_globalny.xlsx', 'exp_intro': 'instrukcja_warunek_globalny.png'}]
    Routine intro
    Routine interTrial
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $gl_level
      loopType = random
      nReps = 2
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      Routine trial
      Routine interTrial
    LoopTerminator trials
  LoopTerminator session
