PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = $[1,1,1]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $cat_pics
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cats_pic.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cat_pics': 'cat_pic3.jpg'},
      {'cat_pics': 'cat_pic2.jpg'},
      {'cat_pics': 'cat_pic1.jpg'},
      {'cat_pics': 'cat_pic5.jpg'},
      {'cat_pics': 'cat_pic6.jpg'},
      {'cat_pics': 'cat_pic7.jpg'},
      {'cat_pics': 'cat_pic8.jpg'},
      {'cat_pics': 'cat_pic9.jpg'},
      {'cat_pics': 'cat_pic10.jpg'},
      {'cat_pics': 'cat_pic11.jpg'},
      {'cat_pics': 'cat_pic12.jpg'},
      {'cat_pics': 'cat_pic13.jpg'},
      {'cat_pics': 'cat_pic14.jpg'}]
    Routine trial
  LoopTerminator trials
